# Generated by OpenSesame 0.27.4 (Frisky Freud)
# Mon Nov 04 14:18:25 2013 (nt)
# <http://www.cogsci.nl/opensesame>

set foreground "black"
set subject_parity "even"
set font_size "6"
set description "Default description"
set font_family "mono"
set title "Bar task"
set font_bold "no"
set coordinates "relative"
set height "1080"
set mouse_backend "xpyriment"
set width "1920"
set compensation "0"
set sampler_backend "legacy"
set font_italic "no"
set background "#b3b3b3"
set subject_nr "0"
set keyboard_backend "legacy"
set start "experiment"
set transparent_variables "no"
set synth_backend "legacy"
set canvas_backend "xpyriment"

define inline_script response
	___run__
	# This code snippet assumes that it is
	# preceded my a sketchpad called 'bars_postChange'
	# with a 0 duration.
	#
	# The code below collects a response for a
	# maximum of 1500ms. After 200ms the canvas
	# is blanked.
	
	from openexp.canvas import canvas
	from openexp.keyboard import keyboard
	
	#Some settings
	timeout1 = 200
	timeout2 = 1500
	allowed_keys = ['x', 'm']
	
	# Create keyboard and canvas objects
	my_keyboard = keyboard(exp, keylist=allowed_keys)
	my_blank_canvas = canvas(exp)
	my_blank_canvas.text('+')
	my_blank_canvas.set_bgcolor('#b3b3b3')
	
	# Set actual timeout. By taking into account
	# the current time and the timestamp of
	# bars_postChange we reduce temporal jitter
	timeout = timeout1  - self.time() + exp.get('time_bars_postChange')
	
	# Collect a keyboard response with a stim_dur timeout
	# and show a blank canvas afterwards
	resp, time = my_keyboard.get_key(timeout=timeout)
	my_blank_canvas.show()
	
	# If no response has been given, we wait for another
	# post_stim_dur milliseconds
	if resp == None:
	    timeout = timeout2 - self.time() + exp.get('time_bars_postChange')
	    resp, time = my_keyboard.get_key(timeout=timeout)
	
	# Set response, correct, and response time
	response_time = time - self.get('time_bars_postChange')
	response = my_keyboard.to_chr(resp)
	if not self.has('correct_response'):
	    correct = 'undefined'
	elif response == self.get('correct_response'):
	    correct = 1
	else:
	    correct = 0
	
	if resp == None and self.get('correct_response') == 'None':
		correct = 1
	
	exp.set('response_time', response_time)
	exp.set('response', response)
	exp.set('correct', correct)
	__end__
	set _prepare ""
	set description "Executes Python code"

define notepad notepad
	__note__
	ORI = Change of the orientation of ONE bar, other bar does not change
	LUM = Change of the luminance of ONE ba, other bar does not change
	LOU = Change of the orientation AND the luminance of ONE bar, other bar does not change
	LOB = Change of the luminance of ONE bar, change of orientation of the other bar!
	
	For each combination of the pre change bars (which are 16), there are 2 possibilities to realize each 
	of the 4 conditions; thus conditions = 16*2*4 = 128
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script fixation_duration
	___run__
	#randomize fixation duration
	#Import random number generator
	import random
	random.seed()
	
	moep = random.randint(2000,2500)
	fixation = (moep-self.get('response_time')+200)
	
	self.sleep(fixation)
	exp.set('fixation', fixation)
	__end__
	set _prepare ""
	set description "Executes Python code"

define inline_script StartNewBlock
	___run__
	# Import the widgets library
	from libopensesame import widgets
	
	# Create a form
	form = widgets.form(self.experiment, cols=[1], rows=[1],
		margins=(250,500,250,500), spacing=0)
	
	if 'block' in locals():
		pass
	else:
		block = 1
	
	if block == 1:
		rest = 'Das war die U+00DCbungsphase.'
	else:
		rest = ''
	
	# Create four widgets
	startblock = widgets.label(form, text='<span color="white", size="36">'+ rest + ' Gleich startet der %d. Experimentalblock.U+005C
	<br /><br /> DrU+00FCcken Sie die LEERTASTE, um zu beginnen.</span>' % block)
	
	# Add the widgets to the form. The position in the form is indicated as a
	# (column, row) tuple.
	form.set_widget(startblock, (0,0))
	
	block = block + 1
	
	form.render()
	__end__
	set _prepare ""
	set description "Executes Python code"

define sequence StartScreen_and_ExperimentalLoop
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run StartNewBlock "always"
	run keyboard_response "always"
	run fixation "always"
	run sleep "always"
	run Loop_experimental_trials "always"

define sketchpad bars_postChange
	set duration "0"
	set description "Displays stimuli"
	draw image -52 0 "v_dark.png" scale=1 center=1 show_if="[post_left]=v_dark"
	draw image -52 0 "h_dark.png" scale=1 center=1 show_if="[post_left]=h_dark"
	draw image -52 0 "v_bright.png" scale=1 center=1 show_if="[post_left]=v_bright"
	draw image -52 0 "h_bright.png" scale=1 center=1 show_if="[post_left]=h_bright"
	draw image 52 0 "v_dark.png" scale=1 center=1 show_if="[post_right]=v_dark"
	draw image 52 0 "h_dark.png" scale=1 center=1 show_if="[post_right]=h_dark"
	draw image 52 0 "v_bright.png" scale=1 center=1 show_if="[post_right]=v_bright"
	draw image 52 0 "h_bright.png" scale=1 center=1 show_if="[post_right]=h_bright"
	draw textline 0 0 "+" center=1 color=black font_family="mono" font_size=6 font_italic=no font_bold=no show_if="always" html="yes"

define loop ExperimentalBlocks
	set repeat "1"
	set description "Repeatedly runs another item"
	set item "StartScreen_and_ExperimentalLoop"
	set column_order "Block"
	set cycles "3"
	set order "sequential"
	setcycle 0 Block "1"
	setcycle 1 Block "2"
	setcycle 2 Block "3"
	run StartScreen_and_ExperimentalLoop

define sequence sequence_PracticeTrials
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run bars_preChange "always"
	run prechange_intervall "always"
	run bars_postChange "always"
	run response "always"
	run fixation "always"
	run fixation_duration "always"
	run block_0 "always"
	run logger "always"
	run notepad "always"

define sequence Sequence_ExperimentalTrials
	run bars_preChange "always"
	run prechange_intervall "always"
	run bars_postChange "always"
	run response "always"
	run fixation "always"
	run fixation_duration "always"
	run logger "always"

define keyboard_response keyboard_response

define sequence experiment
	run Instructions "always"
	run keyboard_response "always"
	run fixation "always"
	run sleep "always"
	run loop_PracticeTrials "always"
	run ExperimentalBlocks "always"

define inline_script sleep
	___run__
	#randomize fixation duration
	#Import random number generator
	import random
	random.seed()
	
	self.sleep(random.randint(2000,2500))
	__end__
	set _prepare ""
	set description "Executes Python code"

define sketchpad bars_preChange
	set duration "200"
	set description "Displays stimuli"
	draw image -52 0 "v_dark.png" scale=1 center=1 show_if="[pre_left]=v_dark"
	draw image -52 0 "h_dark.png" scale=1 center=1 show_if="[pre_left]=h_dark"
	draw image -52 0 "v_bright.png" scale=1 center=1 show_if="[pre_left]=v_bright"
	draw image -52 0 "h_bright.png" scale=1 center=1 show_if="[pre_left]=h_bright"
	draw image 52 0 "v_dark.png" scale=1 center=1 show_if="[pre_right]=v_dark"
	draw image 52 0 "h_dark.png" scale=1 center=1 show_if="[pre_right]=h_dark"
	draw image 52 0 "v_bright.png" scale=1 center=1 show_if="[pre_right]=v_bright"
	draw image 52 0 "h_bright.png" scale=1 center=1 show_if="[pre_right]=h_bright"
	draw textline 0 0 "+" center=1 color=black font_family="mono" font_size=6 font_italic=no font_bold=no show_if="always" html="yes"

define loop Loop_experimental_trials
	set repeat "1"
	set description "Repeatedly runs another item"
	set item "Sequence_ExperimentalTrials"
	set column_order "pre_left;pre_right;post_left;post_right;change;correct_response"
	set cycles "128"
	set order "random"
	setcycle 0 post_right "h_bright"
	setcycle 0 correct_response "None"
	setcycle 0 pre_right "v_bright"
	setcycle 0 post_left "v_bright"
	setcycle 0 pre_left "v_bright"
	setcycle 0 change "ORI"
	setcycle 1 post_right "v_bright"
	setcycle 1 correct_response "None"
	setcycle 1 pre_right "v_bright"
	setcycle 1 post_left "h_bright"
	setcycle 1 pre_left "v_bright"
	setcycle 1 change "ORI"
	setcycle 2 post_right "v_dark"
	setcycle 2 correct_response "m"
	setcycle 2 pre_right "v_bright"
	setcycle 2 post_left "v_bright"
	setcycle 2 pre_left "v_bright"
	setcycle 2 change "LUM"
	setcycle 3 post_right "v_bright"
	setcycle 3 correct_response "x"
	setcycle 3 pre_right "v_bright"
	setcycle 3 post_left "v_dark"
	setcycle 3 pre_left "v_bright"
	setcycle 3 change "LUM"
	setcycle 4 post_right "h_dark"
	setcycle 4 correct_response "m"
	setcycle 4 pre_right "v_bright"
	setcycle 4 post_left "v_bright"
	setcycle 4 pre_left "v_bright"
	setcycle 4 change "LOU"
	setcycle 5 post_right "v_bright"
	setcycle 5 correct_response "x"
	setcycle 5 pre_right "v_bright"
	setcycle 5 post_left "h_dark"
	setcycle 5 pre_left "v_bright"
	setcycle 5 change "LOU"
	setcycle 6 post_right "v_dark"
	setcycle 6 correct_response "m"
	setcycle 6 pre_right "v_bright"
	setcycle 6 post_left "h_bright"
	setcycle 6 pre_left "v_bright"
	setcycle 6 change "LOB"
	setcycle 7 post_right "h_bright"
	setcycle 7 correct_response "x"
	setcycle 7 pre_right "v_bright"
	setcycle 7 post_left "v_dark"
	setcycle 7 pre_left "v_bright"
	setcycle 7 change "LOB"
	setcycle 8 post_right "h_bright"
	setcycle 8 correct_response "None"
	setcycle 8 pre_right "v_bright"
	setcycle 8 post_left "h_bright"
	setcycle 8 pre_left "h_bright"
	setcycle 8 change "ORI"
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	setcycle 16 post_right "h_bright"
	setcycle 16 correct_response "None"
	setcycle 16 pre_right "v_bright"
	setcycle 16 post_left "v_dark"
	setcycle 16 pre_left "v_dark"
	setcycle 16 change "ORI"
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	setcycle 24 post_right "h_bright"
	setcycle 24 correct_response "None"
	setcycle 24 pre_right "v_bright"
	setcycle 24 post_left "h_dark"
	setcycle 24 pre_left "h_dark"
	setcycle 24 change "ORI"
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	setcycle 32 post_right "v_bright"
	setcycle 32 correct_response "None"
	setcycle 32 pre_right "h_bright"
	setcycle 32 post_left "v_bright"
	setcycle 32 pre_left "v_bright"
	setcycle 32 change "ORI"
	setcycle 33 post_right "h_bright"
	setcycle 33 correct_response "None"
	setcycle 33 pre_right "h_bright"
	setcycle 33 post_left "h_bright"
	setcycle 33 pre_left "v_bright"
	setcycle 33 change "ORI"
	setcycle 34 post_right "h_dark"
	setcycle 34 correct_response "m"
	setcycle 34 pre_right "h_bright"
	setcycle 34 post_left "v_bright"
	setcycle 34 pre_left "v_bright"
	setcycle 34 change "LUM"
	setcycle 35 post_right "h_bright"
	setcycle 35 correct_response "x"
	setcycle 35 pre_right "h_bright"
	setcycle 35 post_left "v_dark"
	setcycle 35 pre_left "v_bright"
	setcycle 35 change "LUM"
	setcycle 36 post_right "v_dark"
	setcycle 36 correct_response "m"
	setcycle 36 pre_right "h_bright"
	setcycle 36 post_left "v_bright"
	setcycle 36 pre_left "v_bright"
	setcycle 36 change "LOU"
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	setcycle 38 post_right "v_bright"
	setcycle 38 correct_response "x"
	setcycle 38 pre_right "h_bright"
	setcycle 38 post_left "v_dark"
	setcycle 38 pre_left "v_bright"
	setcycle 38 change "LOB"
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	setcycle 64 post_right "h_dark"
	setcycle 64 correct_response "None"
	setcycle 64 pre_right "v_dark"
	setcycle 64 post_left "v_bright"
	setcycle 64 pre_left "v_bright"
	setcycle 64 change "ORI"
	setcycle 65 post_right "v_dark"
	setcycle 65 correct_response "None"
	setcycle 65 pre_right "v_dark"
	setcycle 65 post_left "h_bright"
	setcycle 65 pre_left "v_bright"
	setcycle 65 change "ORI"
	setcycle 66 post_right "v_bright"
	setcycle 66 correct_response "m"
	setcycle 66 pre_right "v_dark"
	setcycle 66 post_left "v_bright"
	setcycle 66 pre_left "v_bright"
	setcycle 66 change "LUM"
	setcycle 67 post_right "v_dark"
	setcycle 67 correct_response "x"
	setcycle 67 pre_right "v_dark"
	setcycle 67 post_left "v_dark"
	setcycle 67 pre_left "v_bright"
	setcycle 67 change "LUM"
	setcycle 68 post_right "h_bright"
	setcycle 68 correct_response "m"
	setcycle 68 pre_right "v_dark"
	setcycle 68 post_left "v_bright"
	setcycle 68 pre_left "v_bright"
	setcycle 68 change "LOU"
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	setcycle 70 post_right "h_dark"
	setcycle 70 correct_response "x"
	setcycle 70 pre_right "v_dark"
	setcycle 70 post_left "v_dark"
	setcycle 70 pre_left "v_bright"
	setcycle 70 change "LOB"
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	setcycle 96 post_right "v_dark"
	setcycle 96 correct_response "None"
	setcycle 96 pre_right "h_dark"
	setcycle 96 post_left "v_bright"
	setcycle 96 pre_left "v_bright"
	setcycle 96 change "ORI"
	setcycle 97 post_right "h_dark"
	setcycle 97 correct_response "None"
	setcycle 97 pre_right "h_dark"
	setcycle 97 post_left "h_bright"
	setcycle 97 pre_left "v_bright"
	setcycle 97 change "ORI"
	setcycle 98 post_right "h_bright"
	setcycle 98 correct_response "m"
	setcycle 98 pre_right "h_dark"
	setcycle 98 post_left "v_bright"
	setcycle 98 pre_left "v_bright"
	setcycle 98 change "LUM"
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	run Sequence_ExperimentalTrials

define sketchpad prechange_intervall
	set duration "50"
	set description "Displays stimuli"
	draw textline 0 0 "+" center=1 color=black font_family="mono" font_size=6 font_italic=no font_bold=no show_if="always" html="yes"

define sketchpad fixation
	set duration "0"
	set description "Displays stimuli"
	draw textline 0 0 "+" center=1 color=black font_family="mono" font_size=6 font_italic=no font_bold=no show_if="always" html="yes"

define logger logger
	set ignore_missing "yes"
	set description "Logs experimental data"
	set auto_log "no"
	set use_quotes "yes"
	log "response_time"
	log "response"
	log "correct"
	log "fixation"
	log "Block"
	log "post_right"
	log "correct_response"
	log "pre_right"
	log "post_left"
	log "pre_left"
	log "change"

define inline_script block_0
	set _run ""
	___prepare__
	Block = 0
	exp.set('Block', Block)
	__end__
	set description "Executes Python code"

define loop loop_PracticeTrials
	set repeat "1"
	set description "Repeatedly runs another item"
	set skip "0"
	set item "sequence_PracticeTrials"
	set column_order "pre_left;pre_right;post_left;post_right;change;correct_response"
	set cycles "128"
	set order "random"
	setcycle 0 post_right "h_bright"
	setcycle 0 correct_response "None"
	setcycle 0 pre_right "v_bright"
	setcycle 0 post_left "v_bright"
	setcycle 0 pre_left "v_bright"
	setcycle 0 change "ORI"
	setcycle 1 post_right "v_bright"
	setcycle 1 correct_response "None"
	setcycle 1 pre_right "v_bright"
	setcycle 1 post_left "h_bright"
	setcycle 1 pre_left "v_bright"
	setcycle 1 change "ORI"
	setcycle 2 post_right "v_dark"
	setcycle 2 correct_response "m"
	setcycle 2 pre_right "v_bright"
	setcycle 2 post_left "v_bright"
	setcycle 2 pre_left "v_bright"
	setcycle 2 change "LUM"
	setcycle 3 post_right "v_bright"
	setcycle 3 correct_response "x"
	setcycle 3 pre_right "v_bright"
	setcycle 3 post_left "v_dark"
	setcycle 3 pre_left "v_bright"
	setcycle 3 change "LUM"
	setcycle 4 post_right "h_dark"
	setcycle 4 correct_response "m"
	setcycle 4 pre_right "v_bright"
	setcycle 4 post_left "v_bright"
	setcycle 4 pre_left "v_bright"
	setcycle 4 change "LOU"
	setcycle 5 post_right "v_bright"
	setcycle 5 correct_response "x"
	setcycle 5 pre_right "v_bright"
	setcycle 5 post_left "h_dark"
	setcycle 5 pre_left "v_bright"
	setcycle 5 change "LOU"
	setcycle 6 post_right "v_dark"
	setcycle 6 correct_response "m"
	setcycle 6 pre_right "v_bright"
	setcycle 6 post_left "h_bright"
	setcycle 6 pre_left "v_bright"
	setcycle 6 change "LOB"
	setcycle 7 post_right "h_bright"
	setcycle 7 correct_response "x"
	setcycle 7 pre_right "v_bright"
	setcycle 7 post_left "v_dark"
	setcycle 7 pre_left "v_bright"
	setcycle 7 change "LOB"
	setcycle 8 post_right "h_bright"
	setcycle 8 correct_response "None"
	setcycle 8 pre_right "v_bright"
	setcycle 8 post_left "h_bright"
	setcycle 8 pre_left "h_bright"
	setcycle 8 change "ORI"
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	setcycle 16 post_right "h_bright"
	setcycle 16 correct_response "None"
	setcycle 16 pre_right "v_bright"
	setcycle 16 post_left "v_dark"
	setcycle 16 pre_left "v_dark"
	setcycle 16 change "ORI"
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	setcycle 24 post_right "h_bright"
	setcycle 24 correct_response "None"
	setcycle 24 pre_right "v_bright"
	setcycle 24 post_left "h_dark"
	setcycle 24 pre_left "h_dark"
	setcycle 24 change "ORI"
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	setcycle 32 post_right "v_bright"
	setcycle 32 correct_response "None"
	setcycle 32 pre_right "h_bright"
	setcycle 32 post_left "v_bright"
	setcycle 32 pre_left "v_bright"
	setcycle 32 change "ORI"
	setcycle 33 post_right "h_bright"
	setcycle 33 correct_response "None"
	setcycle 33 pre_right "h_bright"
	setcycle 33 post_left "h_bright"
	setcycle 33 pre_left "v_bright"
	setcycle 33 change "ORI"
	setcycle 34 post_right "h_dark"
	setcycle 34 correct_response "m"
	setcycle 34 pre_right "h_bright"
	setcycle 34 post_left "v_bright"
	setcycle 34 pre_left "v_bright"
	setcycle 34 change "LUM"
	setcycle 35 post_right "h_bright"
	setcycle 35 correct_response "x"
	setcycle 35 pre_right "h_bright"
	setcycle 35 post_left "v_dark"
	setcycle 35 pre_left "v_bright"
	setcycle 35 change "LUM"
	setcycle 36 post_right "v_dark"
	setcycle 36 correct_response "m"
	setcycle 36 pre_right "h_bright"
	setcycle 36 post_left "v_bright"
	setcycle 36 pre_left "v_bright"
	setcycle 36 change "LOU"
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	setcycle 38 post_right "v_bright"
	setcycle 38 correct_response "x"
	setcycle 38 pre_right "h_bright"
	setcycle 38 post_left "v_dark"
	setcycle 38 pre_left "v_bright"
	setcycle 38 change "LOB"
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	setcycle 64 post_right "h_dark"
	setcycle 64 correct_response "None"
	setcycle 64 pre_right "v_dark"
	setcycle 64 post_left "v_bright"
	setcycle 64 pre_left "v_bright"
	setcycle 64 change "ORI"
	setcycle 65 post_right "v_dark"
	setcycle 65 correct_response "None"
	setcycle 65 pre_right "v_dark"
	setcycle 65 post_left "h_bright"
	setcycle 65 pre_left "v_bright"
	setcycle 65 change "ORI"
	setcycle 66 post_right "v_bright"
	setcycle 66 correct_response "m"
	setcycle 66 pre_right "v_dark"
	setcycle 66 post_left "v_bright"
	setcycle 66 pre_left "v_bright"
	setcycle 66 change "LUM"
	setcycle 67 post_right "v_dark"
	setcycle 67 correct_response "x"
	setcycle 67 pre_right "v_dark"
	setcycle 67 post_left "v_dark"
	setcycle 67 pre_left "v_bright"
	setcycle 67 change "LUM"
	setcycle 68 post_right "h_bright"
	setcycle 68 correct_response "m"
	setcycle 68 pre_right "v_dark"
	setcycle 68 post_left "v_bright"
	setcycle 68 pre_left "v_bright"
	setcycle 68 change "LOU"
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	setcycle 70 post_right "h_dark"
	setcycle 70 correct_response "x"
	setcycle 70 pre_right "v_dark"
	setcycle 70 post_left "v_dark"
	setcycle 70 pre_left "v_bright"
	setcycle 70 change "LOB"
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	setcycle 96 post_right "v_dark"
	setcycle 96 correct_response "None"
	setcycle 96 pre_right "h_dark"
	setcycle 96 post_left "v_bright"
	setcycle 96 pre_left "v_bright"
	setcycle 96 change "ORI"
	setcycle 97 post_right "h_dark"
	setcycle 97 correct_response "None"
	setcycle 97 pre_right "h_dark"
	setcycle 97 post_left "h_bright"
	setcycle 97 pre_left "v_bright"
	setcycle 97 change "ORI"
	setcycle 98 post_right "h_bright"
	setcycle 98 correct_response "m"
	setcycle 98 pre_right "h_dark"
	setcycle 98 post_left "v_bright"
	setcycle 98 pre_left "v_bright"
	setcycle 98 change "LUM"
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	run sequence_PracticeTrials

define inline_script Instructions
	___run__
	# Import the widgets library
	from libopensesame import widgets
	
	# Create a form
	form = widgets.form(self.experiment, cols=[1], rows=[1],
		margins=(80,500,0,500), spacing=0)
	
	
	# Create and place widget
	text = widgets.label(form, text='<span size="24", color="white">Im folgenden Experiment werden Ihnen schnell aufeinander folgend U+005C
	zwei Paare von Balken gezeigt. Diese Balken erscheinen rechts und links eines in der Mitte gezeigten Fixationskreuzes. Versuchen U+005C
	Sie Ihren Blick wU+00E4hrend des Experiments auf diesem Fixationskreuz zu behalten. U+005C
	Die gezeigten Balken kU+00F6nnen entweder horizontal oder vertikal ausgerichtet sein und ihre Helligkeit U+005C
	ist entweder heller oder dunkler als der Hintergrund.<br /><br />Kurz nach der PrU+00E4sentation des ersten U+005C
	Balkenpaares erscheint ein zweites Balkenpaar, in dem die Ausrichtung oder die Helligkeit der Balken im Vergleich zum ersten U+005C
	Paar geU+00E4ndert sein kann. Ihre Aufgabe ist es darauf zu achten, welcher der beiden Balken seine <i><b>Helligkeit</b></i> U+005C
	U+00E4ndert. Ignorieren Sie dabei, ob einer der Balken seine Ausrichtung geU+00E4ndert hat. Es wird hU+00F6chstens U+005C
	ein Balken seine Helligkeit U+00E4ndern, aber nicht in allen DurchgU+00E4ngen wird dies der Fall sein.<br /><br/>U+005C
	DrU+00FCcken Sie die <i>linke Maustaste</i>, wenn sich die Helligkeit des linken Balkens geU+00E4ndert hat und drU+00FCcken Sie die <i>rechte U+005C
	Maustaste</i>, wenn sich die Helligkeit des rechten Balkens geU+00E4ndert hat. Versuchen Sie dabei so schnell und akkurat wie U+005C
	mU+00F6glich zu reagieren.<br /><br />Insgesamt besteht das Experiment aus vier BlU+00F6cken, die jeweils etwa 7 Minuten dauern. Der erste Block U+005C
	ist ein U+00DCbungsblock, in dem Sie sich an die Aufgabe gewU+00F6hnen kU+00F6nnen. Etwaige Fragen kU+00F6nnen Sie jetzt dem Experimentator stellenU+005C
	<br /><br /><span size="30">DrU+00FCcken Sie nun die LEERTASTE, um den U+00DCbungsdurchgang zu starten</span></span>', center=False)
	form.set_widget(text, (0,0))
	
	form.render()
	__end__
	set _prepare ""
	set description "Executes Python code"

