# Generated by OpenSesame 0.27.4 (Frisky Freud)
# Tue Nov 19 09:32:49 2013 (nt)
# <http://www.cogsci.nl/opensesame>

set foreground "black"
set subject_parity "even"
set font_size "6"
set description "Default description"
set font_family "mono"
set title "Bar task"
set font_bold "no"
set coordinates "relative"
set height "1080"
set mouse_backend "xpyriment"
set width "1280"
set compensation "0"
set sampler_backend "legacy"
set font_italic "no"
set background "#818181"
set subject_nr "0"
set keyboard_backend "legacy"
set start "experiment"
set transparent_variables "no"
set synth_backend "legacy"
set canvas_backend "xpyriment"

define inline_script StartNewBlock
	___run__
	# Import the widgets library
	from libopensesame import widgets
	
	# Create a form
	form = widgets.form(self.experiment, cols=[1], rows=[1],
		margins=(50,100,50,100), spacing=0)
	
	if 'block' in locals():
		pass
	else:
		block = 1
	
	if block == 1:
		rest = 'Das war die U+00DCbungsphase.'
	else:
		rest = ''
	
	# Create four widgets
	startblock = widgets.label(form, text='<span color="white", size="36">'+ rest + ' Gleich startet der %d. Experimentalblock.U+005C
	<br /><br /> DrU+00FCcken Sie die LEERTASTE, um zu beginnen.</span>' % block)
	
	# Add the widgets to the form. The position in the form is indicated as a
	# (column, row) tuple.
	form.set_widget(startblock, (0,0))
	
	block = block + 1
	
	form.render()
	__end__
	set _prepare ""
	set description "Executes Python code"

define inline_script response_2
	___run__
	#randomize fixation duration
	#Import random number generator
	import random
	random.seed()
	
	#define mouse object
	if self.get('rt') == 'None':
		#import expyriment mouse response
		from expyriment.io import Mouse
		my_mouse = Mouse(show_cursor=False, track_button_events=True, track_motion_events=None)
		#define 'wait_event': waits for mouse click and saves button and response time
		bla = my_mouse.wait_event(wait_button=True, buttons=[0,2], wait_motion=False, duration=1300)
		#'wait_event' tuple returens button click as first element, save this click!
		mouse_button_clicked = bla[0]
		#do not end bar presentation if there has been a click; always wait for 1300ms
		if mouse_button_clicked == None:
			rt = 1500
			self.sleep(random.randint(700,1200))
		elif mouse_button_clicked == 0 or mouse_button_clicked == 2:
			#'wait_event' tuple returens response click as fourth element, save this! Add 200ms because the bar presentation started 200ms before this script
			rt = int(bla[3]) + 200
			self.sleep(random.randint(700,1200)+(1300-rt))
		exp.set('mouse_button_clicked', mouse_button_clicked)
		exp.set('rt', rt)
	elif self.get('rt') != 'None':
		self.sleep(random.randint(2000,2500))
	__end__
	set _prepare ""
	set description "Executes Python code"

define inline_script sleep
	___run__
	#randomize fixation duration
	#Import random number generator
	import random
	random.seed()
	
	self.sleep(random.randint(2000,2500))
	__end__
	set _prepare ""
	set description "Executes Python code"

define sketchpad prechange_intervall
	set duration "45"
	set description "Displays stimuli"
	draw textline 0 0 "+" center=1 color=black font_family="mono" font_size=6 font_italic=no font_bold=no show_if="always" html="yes"

define sequence Sequence_ExperimentalTrials
	run bars_preChange "always"
	run prechange_intervall "always"
	run bars_postChange "always"
	run response "always"
	run fixation "always"
	run response_2 "always"
	run trial_correct "always"
	run logger "always"

define sequence StartScreen_and_ExperimentalLoop
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run StartNewBlock "always"
	run keyboard_response "always"
	run fixation "always"
	run sleep "always"
	run Loop_experimental_trials "always"

define inline_script response
	___run__
	#import expyriment mouse response
	from expyriment.io import Mouse
	#define mouse object
	my_mouse = Mouse(show_cursor=False, track_button_events=True, track_motion_events=None)
	#define 'wait_event': waits for mouse click and saves button and response time
	bla = my_mouse.wait_event(wait_button=True, buttons=[0,2], wait_motion=False, duration=195)
	#'wait_event' tuple returens button click as first element, save this click!
	mouse_button_clicked = bla[0]
	#'wait_event' tuple returens response click as fourth element, save this!
	rt = bla[3]
	#do not end bar presentation if there has been a click; always wait for 200ms
	if rt == None:
		pass
	elif mouse_button_clicked == 0 or mouse_button_clicked == 2:
		rt = int(rt)
		self.sleep(195-rt)
	
	#set variables
	exp.set('mouse_button_clicked', mouse_button_clicked)
	exp.set('rt', rt)
	__end__
	set _prepare ""
	set description "Executes Python code"

define loop ExperimentalBlocks
	set repeat "1"
	set description "Repeatedly runs another item"
	set item "StartScreen_and_ExperimentalLoop"
	set column_order "Block"
	set cycles "3"
	set order "sequential"
	setcycle 0 Block "1"
	setcycle 1 Block "2"
	setcycle 2 Block "3"
	run StartScreen_and_ExperimentalLoop

define sequence experiment
	run adjust_to_monitor "always"
	run Instructions "always"
	run keyboard_response "always"
	run fixation "always"
	run sleep "always"
	run loop_PracticeTrials "always"
	run ExperimentalBlocks "always"

define sketchpad bars_preChange
	set duration "195"
	set description "Displays stimuli"
	draw rect [vertical_x_left] [vertical_y] [bar_broad] [bar_narrow] fill=1 penwidth=1 color=[color_dark] show_if="[pre_left]=v_dark"
	draw rect [horizontal_x_left] [horizontal_y] [bar_narrow] [bar_broad] fill=1 penwidth=1 color=[color_dark] show_if="[pre_left]=h_dark"
	draw rect [vertical_x_left] [vertical_y] [bar_broad] [bar_narrow] fill=1 penwidth=1 color=[color_bright] show_if="[pre_left]=v_bright"
	draw rect [horizontal_x_left] [horizontal_y] [bar_narrow] [bar_broad] fill=1 penwidth=1 color=[color_bright] show_if="[pre_left]=h_bright"
	draw rect [vertical_x_right] [vertical_y] [bar_broad] [bar_narrow] fill=1 penwidth=1 color=[color_dark] show_if="[pre_right]=v_dark"
	draw rect [horizontal_x_right] [horizontal_y] [bar_narrow] [bar_broad] fill=1 penwidth=1 color=[color_dark] show_if="[pre_right]=h_dark"
	draw rect [vertical_x_right] [vertical_y] [bar_broad] [bar_narrow] fill=1 penwidth=1 color=[color_bright] show_if="[pre_right]=v_bright"
	draw rect [horizontal_x_right] [horizontal_y] [bar_narrow] [bar_broad] fill=1 penwidth=1 color=[color_bright] show_if="[pre_right]=h_bright"
	draw textline 0 0 "+" center=1 color=black font_family="mono" font_size=6 font_italic=no font_bold=no show_if="always" html="yes"

define logger logger
	set ignore_missing "yes"
	set description "Logs experimental data"
	set auto_log "no"
	set use_quotes "yes"
	log "subject_nr"
	log "mouse_button_clicked"
	log "rt"
	log "Block"
	log "post_right"
	log "correct_response"
	log "pre_right"
	log "post_left"
	log "pre_left"
	log "change"
	log "correct"

define sequence sequence_PracticeTrials
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run bars_preChange "always"
	run prechange_intervall "always"
	run bars_postChange "always"
	run response "always"
	run fixation "always"
	run response_2 "always"
	run trial_correct "always"
	run block_0 "always"
	run logger "always"
	run notepad "always"

define loop loop_PracticeTrials
	set repeat "1"
	set description "Repeatedly runs another item"
	set skip "0"
	set item "sequence_PracticeTrials"
	set column_order "pre_left;pre_right;post_left;post_right;change;correct_response"
	set cycles "128"
	set order "random"
	setcycle 0 post_right "h_bright"
	setcycle 0 correct_response "None"
	setcycle 0 pre_right "v_bright"
	setcycle 0 post_left "v_bright"
	setcycle 0 pre_left "v_bright"
	setcycle 0 change "ORI"
	setcycle 1 post_right "v_bright"
	setcycle 1 correct_response "None"
	setcycle 1 pre_right "v_bright"
	setcycle 1 post_left "h_bright"
	setcycle 1 pre_left "v_bright"
	setcycle 1 change "ORI"
	setcycle 2 post_right "v_dark"
	setcycle 2 correct_response "2"
	setcycle 2 pre_right "v_bright"
	setcycle 2 post_left "v_bright"
	setcycle 2 pre_left "v_bright"
	setcycle 2 change "LUM"
	setcycle 3 post_right "v_bright"
	setcycle 3 correct_response "0"
	setcycle 3 pre_right "v_bright"
	setcycle 3 post_left "v_dark"
	setcycle 3 pre_left "v_bright"
	setcycle 3 change "LUM"
	setcycle 4 post_right "h_dark"
	setcycle 4 correct_response "2"
	setcycle 4 pre_right "v_bright"
	setcycle 4 post_left "v_bright"
	setcycle 4 pre_left "v_bright"
	setcycle 4 change "LOU"
	setcycle 5 post_right "v_bright"
	setcycle 5 correct_response "0"
	setcycle 5 pre_right "v_bright"
	setcycle 5 post_left "h_dark"
	setcycle 5 pre_left "v_bright"
	setcycle 5 change "LOU"
	setcycle 6 post_right "v_dark"
	setcycle 6 correct_response "2"
	setcycle 6 pre_right "v_bright"
	setcycle 6 post_left "h_bright"
	setcycle 6 pre_left "v_bright"
	setcycle 6 change "LOB"
	setcycle 7 post_right "h_bright"
	setcycle 7 correct_response "0"
	setcycle 7 pre_right "v_bright"
	setcycle 7 post_left "v_dark"
	setcycle 7 pre_left "v_bright"
	setcycle 7 change "LOB"
	setcycle 8 post_right "h_bright"
	setcycle 8 correct_response "None"
	setcycle 8 pre_right "v_bright"
	setcycle 8 post_left "h_bright"
	setcycle 8 pre_left "h_bright"
	setcycle 8 change "ORI"
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	setcycle 16 post_right "h_bright"
	setcycle 16 correct_response "None"
	setcycle 16 pre_right "v_bright"
	setcycle 16 post_left "v_dark"
	setcycle 16 pre_left "v_dark"
	setcycle 16 change "ORI"
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	setcycle 24 post_right "h_bright"
	setcycle 24 correct_response "None"
	setcycle 24 pre_right "v_bright"
	setcycle 24 post_left "h_dark"
	setcycle 24 pre_left "h_dark"
	setcycle 24 change "ORI"
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	setcycle 32 post_right "v_bright"
	setcycle 32 correct_response "None"
	setcycle 32 pre_right "h_bright"
	setcycle 32 post_left "v_bright"
	setcycle 32 pre_left "v_bright"
	setcycle 32 change "ORI"
	setcycle 33 post_right "h_bright"
	setcycle 33 correct_response "None"
	setcycle 33 pre_right "h_bright"
	setcycle 33 post_left "h_bright"
	setcycle 33 pre_left "v_bright"
	setcycle 33 change "ORI"
	setcycle 34 post_right "h_dark"
	setcycle 34 correct_response "2"
	setcycle 34 pre_right "h_bright"
	setcycle 34 post_left "v_bright"
	setcycle 34 pre_left "v_bright"
	setcycle 34 change "LUM"
	setcycle 35 post_right "h_bright"
	setcycle 35 correct_response "0"
	setcycle 35 pre_right "h_bright"
	setcycle 35 post_left "v_dark"
	setcycle 35 pre_left "v_bright"
	setcycle 35 change "LUM"
	setcycle 36 post_right "v_dark"
	setcycle 36 correct_response "2"
	setcycle 36 pre_right "h_bright"
	setcycle 36 post_left "v_bright"
	setcycle 36 pre_left "v_bright"
	setcycle 36 change "LOU"
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	setcycle 38 post_right "v_bright"
	setcycle 38 correct_response "0"
	setcycle 38 pre_right "h_bright"
	setcycle 38 post_left "v_dark"
	setcycle 38 pre_left "v_bright"
	setcycle 38 change "LOB"
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	setcycle 64 post_right "h_dark"
	setcycle 64 correct_response "None"
	setcycle 64 pre_right "v_dark"
	setcycle 64 post_left "v_bright"
	setcycle 64 pre_left "v_bright"
	setcycle 64 change "ORI"
	setcycle 65 post_right "v_dark"
	setcycle 65 correct_response "None"
	setcycle 65 pre_right "v_dark"
	setcycle 65 post_left "h_bright"
	setcycle 65 pre_left "v_bright"
	setcycle 65 change "ORI"
	setcycle 66 post_right "v_bright"
	setcycle 66 correct_response "2"
	setcycle 66 pre_right "v_dark"
	setcycle 66 post_left "v_bright"
	setcycle 66 pre_left "v_bright"
	setcycle 66 change "LUM"
	setcycle 67 post_right "v_dark"
	setcycle 67 correct_response "0"
	setcycle 67 pre_right "v_dark"
	setcycle 67 post_left "v_dark"
	setcycle 67 pre_left "v_bright"
	setcycle 67 change "LUM"
	setcycle 68 post_right "h_bright"
	setcycle 68 correct_response "2"
	setcycle 68 pre_right "v_dark"
	setcycle 68 post_left "v_bright"
	setcycle 68 pre_left "v_bright"
	setcycle 68 change "LOU"
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	setcycle 70 post_right "h_dark"
	setcycle 70 correct_response "0"
	setcycle 70 pre_right "v_dark"
	setcycle 70 post_left "v_dark"
	setcycle 70 pre_left "v_bright"
	setcycle 70 change "LOB"
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	setcycle 96 post_right "v_dark"
	setcycle 96 correct_response "None"
	setcycle 96 pre_right "h_dark"
	setcycle 96 post_left "v_bright"
	setcycle 96 pre_left "v_bright"
	setcycle 96 change "ORI"
	setcycle 97 post_right "h_dark"
	setcycle 97 correct_response "None"
	setcycle 97 pre_right "h_dark"
	setcycle 97 post_left "h_bright"
	setcycle 97 pre_left "v_bright"
	setcycle 97 change "ORI"
	setcycle 98 post_right "h_bright"
	setcycle 98 correct_response "2"
	setcycle 98 pre_right "h_dark"
	setcycle 98 post_left "v_bright"
	setcycle 98 pre_left "v_bright"
	setcycle 98 change "LUM"
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	run sequence_PracticeTrials

define inline_script Instructions
	___run__
	# Import the widgets library
	from libopensesame import widgets
	
	# Create a form
	form = widgets.form(self.experiment, cols=[1], rows=[1],
		margins=(50,100,50,100), spacing=0)
	
	
	# Create and place widget
	text = widgets.label(form, text='<span size="24", color="white">Im folgenden Experiment werden Ihnen schnell aufeinander U+005C
	folgend zwei Paare von Balken gezeigt. Diese Balken erscheinen rechts und links eines in der Mitte gezeigten U+005C
	Fixationskreuzes. Versuchen Sie Ihren Blick wU+00E4hrend des Experiments auf diesem Fixationskreuz zu behalten. U+005C
	Die gezeigten Balken kU+00F6nnen entweder horizontal oder vertikal ausgerichtet sein und ihre Helligkeit U+005C
	ist entweder heller oder dunkler als der Hintergrund.<br /><br />Kurz nach der PrU+00E4sentation des ersten U+005C
	Balkenpaares erscheint ein zweites Balkenpaar, in dem die Ausrichtung oder die Helligkeit der Balken im Vergleich zum ersten U+005C
	Paar geU+00E4ndert sein kann. Ihre Aufgabe ist es darauf zu achten, welcher der beiden Balken seine <i><b>Helligkeit</b></i> U+005C
	U+00E4ndert. Ignorieren Sie dabei, ob einer der Balken seine Ausrichtung geU+00E4ndert hat. Es wird hU+00F6chstens U+005C
	ein Balken seine Helligkeit U+00E4ndern, aber nicht in allen DurchgU+00E4ngen wird dies der Fall sein.<br /><br/>U+005C
	DrU+00FCcken Sie die <i>linke Maustaste</i> mit Ihrem <i>linken Zeigefinger</i>, wenn sich die Helligkeit des linken Balkens U+005C
	geU+00E4ndert hat und drU+00FCcken Sie die <i>rechte Maustaste</i> mit Ihrem <i>rechten Zeigefinger</i>, wenn sich die U+005C
	Helligkeit des rechten Balkens geU+00E4ndert hat. Versuchen Sie dabei so schnell und akkurat wie U+005C
	mU+00F6glich zu reagieren.<br /><br />Insgesamt besteht das Experiment aus vier BlU+00F6cken, die jeweils etwa 6 Minuten dauern. U+005C
	Der erste Block ist ein U+00DCbungsblock, in dem Sie sich an die Aufgabe gewU+00F6hnen kU+00F6nnen. Etwaige Fragen U+005C
	kU+00F6nnen Sie jetzt dem Experimentator stellen <br /><br /><span size="30">DrU+00FCcken Sie nun die LEERTASTE, U+005C
	um den U+00DCbungsdurchgang zu starten</span></span>', center=False)
	form.set_widget(text, (0,0))
	
	form.render()
	__end__
	set _prepare ""
	set description "Executes Python code"

define sketchpad fixation
	set duration "0"
	set description "Displays stimuli"
	draw textline 0 0 "+" center=1 color=black font_family="mono" font_size=6 font_italic=no font_bold=no show_if="always" html="yes"

define loop Loop_experimental_trials
	set repeat "1"
	set description "Repeatedly runs another item"
	set item "Sequence_ExperimentalTrials"
	set column_order "pre_left;pre_right;post_left;post_right;change;correct_response"
	set cycles "128"
	set order "random"
	setcycle 0 post_right "h_bright"
	setcycle 0 correct_response "None"
	setcycle 0 pre_right "v_bright"
	setcycle 0 post_left "v_bright"
	setcycle 0 pre_left "v_bright"
	setcycle 0 change "ORI"
	setcycle 1 post_right "v_bright"
	setcycle 1 correct_response "None"
	setcycle 1 pre_right "v_bright"
	setcycle 1 post_left "h_bright"
	setcycle 1 pre_left "v_bright"
	setcycle 1 change "ORI"
	setcycle 2 post_right "v_dark"
	setcycle 2 correct_response "2"
	setcycle 2 pre_right "v_bright"
	setcycle 2 post_left "v_bright"
	setcycle 2 pre_left "v_bright"
	setcycle 2 change "LUM"
	setcycle 3 post_right "v_bright"
	setcycle 3 correct_response "0"
	setcycle 3 pre_right "v_bright"
	setcycle 3 post_left "v_dark"
	setcycle 3 pre_left "v_bright"
	setcycle 3 change "LUM"
	setcycle 4 post_right "h_dark"
	setcycle 4 correct_response "2"
	setcycle 4 pre_right "v_bright"
	setcycle 4 post_left "v_bright"
	setcycle 4 pre_left "v_bright"
	setcycle 4 change "LOU"
	setcycle 5 post_right "v_bright"
	setcycle 5 correct_response "0"
	setcycle 5 pre_right "v_bright"
	setcycle 5 post_left "h_dark"
	setcycle 5 pre_left "v_bright"
	setcycle 5 change "LOU"
	setcycle 6 post_right "v_dark"
	setcycle 6 correct_response "2"
	setcycle 6 pre_right "v_bright"
	setcycle 6 post_left "h_bright"
	setcycle 6 pre_left "v_bright"
	setcycle 6 change "LOB"
	setcycle 7 post_right "h_bright"
	setcycle 7 correct_response "0"
	setcycle 7 pre_right "v_bright"
	setcycle 7 post_left "v_dark"
	setcycle 7 pre_left "v_bright"
	setcycle 7 change "LOB"
	setcycle 8 post_right "h_bright"
	setcycle 8 correct_response "None"
	setcycle 8 pre_right "v_bright"
	setcycle 8 post_left "h_bright"
	setcycle 8 pre_left "h_bright"
	setcycle 8 change "ORI"
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	setcycle 16 post_right "h_bright"
	setcycle 16 correct_response "None"
	setcycle 16 pre_right "v_bright"
	setcycle 16 post_left "v_dark"
	setcycle 16 pre_left "v_dark"
	setcycle 16 change "ORI"
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	setcycle 24 post_right "h_bright"
	setcycle 24 correct_response "None"
	setcycle 24 pre_right "v_bright"
	setcycle 24 post_left "h_dark"
	setcycle 24 pre_left "h_dark"
	setcycle 24 change "ORI"
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	setcycle 32 post_right "v_bright"
	setcycle 32 correct_response "None"
	setcycle 32 pre_right "h_bright"
	setcycle 32 post_left "v_bright"
	setcycle 32 pre_left "v_bright"
	setcycle 32 change "ORI"
	setcycle 33 post_right "h_bright"
	setcycle 33 correct_response "None"
	setcycle 33 pre_right "h_bright"
	setcycle 33 post_left "h_bright"
	setcycle 33 pre_left "v_bright"
	setcycle 33 change "ORI"
	setcycle 34 post_right "h_dark"
	setcycle 34 correct_response "2"
	setcycle 34 pre_right "h_bright"
	setcycle 34 post_left "v_bright"
	setcycle 34 pre_left "v_bright"
	setcycle 34 change "LUM"
	setcycle 35 post_right "h_bright"
	setcycle 35 correct_response "0"
	setcycle 35 pre_right "h_bright"
	setcycle 35 post_left "v_dark"
	setcycle 35 pre_left "v_bright"
	setcycle 35 change "LUM"
	setcycle 36 post_right "v_dark"
	setcycle 36 correct_response "2"
	setcycle 36 pre_right "h_bright"
	setcycle 36 post_left "v_bright"
	setcycle 36 pre_left "v_bright"
	setcycle 36 change "LOU"
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	setcycle 38 post_right "v_bright"
	setcycle 38 correct_response "0"
	setcycle 38 pre_right "h_bright"
	setcycle 38 post_left "v_dark"
	setcycle 38 pre_left "v_bright"
	setcycle 38 change "LOB"
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	setcycle 64 post_right "h_dark"
	setcycle 64 correct_response "None"
	setcycle 64 pre_right "v_dark"
	setcycle 64 post_left "v_bright"
	setcycle 64 pre_left "v_bright"
	setcycle 64 change "ORI"
	setcycle 65 post_right "v_dark"
	setcycle 65 correct_response "None"
	setcycle 65 pre_right "v_dark"
	setcycle 65 post_left "h_bright"
	setcycle 65 pre_left "v_bright"
	setcycle 65 change "ORI"
	setcycle 66 post_right "v_bright"
	setcycle 66 correct_response "2"
	setcycle 66 pre_right "v_dark"
	setcycle 66 post_left "v_bright"
	setcycle 66 pre_left "v_bright"
	setcycle 66 change "LUM"
	setcycle 67 post_right "v_dark"
	setcycle 67 correct_response "0"
	setcycle 67 pre_right "v_dark"
	setcycle 67 post_left "v_dark"
	setcycle 67 pre_left "v_bright"
	setcycle 67 change "LUM"
	setcycle 68 post_right "h_bright"
	setcycle 68 correct_response "2"
	setcycle 68 pre_right "v_dark"
	setcycle 68 post_left "v_bright"
	setcycle 68 pre_left "v_bright"
	setcycle 68 change "LOU"
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	setcycle 70 post_right "h_dark"
	setcycle 70 correct_response "0"
	setcycle 70 pre_right "v_dark"
	setcycle 70 post_left "v_dark"
	setcycle 70 pre_left "v_bright"
	setcycle 70 change "LOB"
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	setcycle 96 post_right "v_dark"
	setcycle 96 correct_response "None"
	setcycle 96 pre_right "h_dark"
	setcycle 96 post_left "v_bright"
	setcycle 96 pre_left "v_bright"
	setcycle 96 change "ORI"
	setcycle 97 post_right "h_dark"
	setcycle 97 correct_response "None"
	setcycle 97 pre_right "h_dark"
	setcycle 97 post_left "h_bright"
	setcycle 97 pre_left "v_bright"
	setcycle 97 change "ORI"
	setcycle 98 post_right "h_bright"
	setcycle 98 correct_response "2"
	setcycle 98 pre_right "h_dark"
	setcycle 98 post_left "v_bright"
	setcycle 98 pre_left "v_bright"
	setcycle 98 change "LUM"
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	run Sequence_ExperimentalTrials

define notepad notepad
	__note__
	ORI = Change of the orientation of ONE bar, other bar does not change
	LUM = Change of the luminance of ONE ba, other bar does not change
	LOU = Change of the orientation AND the luminance of ONE bar, other bar does not change
	LOB = Change of the luminance of ONE bar, change of orientation of the other bar!
	
	For each combination of the pre change bars (which are 16), there are 2 possibilities to realize each 
	of the 4 conditions; thus conditions = 16*2*4 = 128
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script adjust_to_monitor
	___run__
	#color values to get the desired luminance values
	color_dark = '#6b6b6b' #corresponds to a luminance of 20cd/m^2 on the current screen, change for your screen!
	color_bright = '#a0a0a0' #corresponds to a luminance of 45cd/m^2 on the current screen, change for your screen!
	
	exp.set('color_dark', color_dark)
	exp.set('color_bright', color_bright)
	
	##Insert three values! 
	
	#compute size stimuli etc. so that this experiment can be run on any monitor
	screen_cm = 36.5 ##insert  your value here
	screen_px = 1280 ##insert  your value here
	screen_distance = 60 ##insert  your value here
	
	
	import math
	
	# define tangez function so that seating distance can be related to stimuli size
	def tan(x):
	    import math
	    tangenz = math.tan((math.pi/180)*x)
	    return tangenz
	
	
	#bar stimuli correspond to a size of 0.56U+00B0 x 1.35U+00B0 of visual angle; if a participant is seated 60cm from the monitor this is in cm:
	bar_narrow_cm = 2*screen_distance*tan(0.56/2)
	bar_broad_cm = 2*screen_distance*tan(1.35/2)
	
	#distance of bars to center: 1.1U+00B0; in cm:
	distance_cm = 2*screen_distance*tan(1.1/2)
	
	#compute pixel sizes for the stimuli
	bar_broad_px = (screen_px/screen_cm)*bar_broad_cm
	bar_narrow_px = (screen_px/screen_cm)*bar_narrow_cm
	
	#compute pixels for distance between stimli and center
	distance_px = (screen_px/screen_cm)*distance_cm
	
	#compute position where the bars must be located
	vertical_x_left = -(distance_px + (bar_broad_px/2)-1)
	vertical_x_right = distance_px - (bar_broad_px/2)+1
	vertical_y = -((bar_narrow_px/2) + 1)
	
	horizontal_x_left = -(distance_px + (bar_narrow_px/2)-1)
	horizontal_x_right = distance_px - (bar_narrow_px/2)+1
	horizontal_y = -((bar_broad_px/2) + 1)
	
	
	#set the height and width of the bars to the experiment
	exp.set('bar_broad', bar_broad_px)
	exp.set('bar_narrow', bar_narrow_px)
	
	#set positioning of the bars to the experiment
	exp.set('vertical_x_left', vertical_x_left)
	exp.set('vertical_x_right', vertical_x_right)
	exp.set('vertical_y', vertical_y)
	exp.set('horizontal_x_left', horizontal_x_left)
	exp.set('horizontal_x_right', horizontal_x_right)
	exp.set('horizontal_y', horizontal_y)
	__end__
	set _prepare ""
	set description "Executes Python code"

define sketchpad bars_postChange
	set duration "0"
	set description "Displays stimuli"
	draw rect [vertical_x_left] [vertical_y] [bar_broad] [bar_narrow] fill=1 penwidth=1 color=[color_dark] show_if="[post_left]=v_dark"
	draw rect [horizontal_x_left] [horizontal_y] [bar_narrow] [bar_broad] fill=1 penwidth=1 color=[color_dark] show_if="[post_left]=h_dark"
	draw rect [vertical_x_left] [vertical_y] [bar_broad] [bar_narrow] fill=1 penwidth=1 color=[color_bright] show_if="[post_left]=v_bright"
	draw rect [horizontal_x_left] [horizontal_y] [bar_narrow] [bar_broad] fill=1 penwidth=1 color=[color_bright] show_if="[post_left]=h_bright"
	draw rect [vertical_x_right] [vertical_y] [bar_broad] [bar_narrow] fill=1 penwidth=1 color=[color_dark] show_if="[post_right]=v_dark"
	draw rect [horizontal_x_right] [horizontal_y] [bar_narrow] [bar_broad] fill=1 penwidth=1 color=[color_dark] show_if="[post_right]=h_dark"
	draw rect [vertical_x_right] [vertical_y] [bar_broad] [bar_narrow] fill=1 penwidth=1 color=[color_bright] show_if="[post_right]=v_bright"
	draw rect [horizontal_x_right] [horizontal_y] [bar_narrow] [bar_broad] fill=1 penwidth=1 color=[color_bright] show_if="[post_right]=h_bright"
	draw textline 0 0 "+" center=1 color=black font_family="mono" font_size=6 font_italic=no font_bold=no show_if="always" html="yes"

define keyboard_response keyboard_response

define inline_script trial_correct
	___run__
	if self.get('mouse_button_clicked') == self.get('correct_response'):
		correct = 1
	else:
		correct = 0
	exp.set('correct', correct)
	__end__
	set _prepare ""
	set description "Executes Python code"

define inline_script block_0
	set _run ""
	___prepare__
	Block = 0
	exp.set('Block', Block)
	__end__
	set description "Executes Python code"

